#  Example Qudi configuration file.
#  The recommended path for user specific files is C:\Users\<user_name>\qudi\config

global:
    # list of modules to load when starting
    startup_modules: []

    # Module server configuration for accessing qudi GUI/logic/hardware modules from remote clients
    remote_modules_server:
        address: 'localhost'
        port: 12345

    # Server port for serving the active qudi module namespace locally (localhost).
    # Used by e.g. the Qudi jupyter kernel.
    namespace_server_port: 18861

    # If this flag is set (True), all arguments passed to qudi module APIs from remote
    # (jupyter notebook, qudi console, remote modules) will be wrapped and passed "per value"
    # (serialized and de-serialized). This is avoiding a lot of inconveniences with using numpy in
    # remote clients.
    # If you do not want to use this workaround and know what you are doing, you can disable this
    # feature by setting this flag to False.
    force_remote_calls_by_value: True

    # Qss stylesheet for controlling the appearance of the GUIs.
    # Absolute path or relative to qudi.artwork.styles
    stylesheet: 'qdark.qss'

    # Default root directory for measurement data storage. All eventual data sub-directories should
    # be contained within this directory. This is not enforced, just convention.
    # The fallback directory is <user home>/qudi/Data/
    # default_data_dir: C:\Users\neverhorst\qudi\Data

    # Save data to daily data sub-directories by default
    daily_data_dirs: True

gui:
    time_series_gui:
        module.Class: 'time_series.time_series_gui.TimeSeriesGui'
        options:
            use_antialias: True  # optional, set to False if you encounter performance issues
        connect:
            _time_series_logic_con: time_series_reader_logic

    scanner_gui:
        module.Class: 'scanning.scannergui.ScannerGui'
        options:
            default_position_unit_prefix: 'u'  # optional, use unit prefix characters, e.g. 'u' or 'n'
        #     min_crosshair_size_fraction: 0.02   # minimum crosshair size as fraction of the displayed scan range
        connect:
            scanning_logic: scanning_probe_logic
            data_logic: scanning_data_logic
            optimize_logic: scanning_optimize_logic
            
    spectrometer:
        module.Class: 'spectrometer.spectrometer_gui.SpectrometerGui'
        connect:
            spectrometer_logic: 'spectrometer_logic'
                
    simple_scan_gui:
        module.Class: 'simple_scan_gui.simple_scan_gui.SimpleScanGui'
        connect:
            simple_scan_logic: 'simple_scan_logic'

    time_histogram_gui:
        module.Class: 'time_histogram.time_histogram_gui.TimeHistogramGui'
        connect:
            time_hist_logic: 'time_hist_logic'
            
    simple_awg_gui:
        module.Class: 'simple_awg.simple_awg_gui.SimpleAWGGui'
        #options:
            #save_path: 'C:\Users\QuTE_Lab\Code\Pulses' #optional, otherwise use default data dir
        connect:
            simpleawglogic: 'simple_awg_logic'
            microwave: microwave_dummy  #Optional for RF control
            
    script_builder:
        module.Class: automate.script_builder.ScriptBuilderGUI
        options:
            has_picoharp : False

    positioner_gui:
        module.Class: 'positioner_control.positioner_gui.PositionerGui'
        connect:
            positioner_logic: positioner_logic

    camera_gui:
        module.Class: 'camera.cameragui.CameraGui'
        connect:
            camera_logic: camera_logic

    odmr_gui:
        module.Class: 'odmr.odmrgui.OdmrGui'
        connect:
            odmr_logic: 'odmr_logic'

    laser_gui:
        module.Class: 'laser.laser_gui.LaserGui'
        connect:
            laser_logic: laser_logic

    switch_gui:
        module.Class: 'switch.switch_gui.SwitchGui'
        connect:
            switchlogic: 'switch_logic'

    pulsed_gui:
        module.Class: 'pulsed.pulsed_maingui.PulsedMeasurementGui'
        connect:
            pulsedmasterlogic: 'pulsed_master_logic'

    qdplot_gui:
        module.Class: 'qdplot.qdplot_gui.QDPlotterGui'
        connect:
            qdplot_logic: 'qdplot_logic'

    pid_gui:
        module.Class: 'pidgui.pidgui.PIDGui'
        connect:
            pid_logic: pid_logic

    task_runner_gui:
        module.Class: 'taskrunner.task_runner_gui.TaskRunnerGui'
        connect:
            task_runner: 'task_runner_logic'

    poi_manager_gui:
        module.Class: 'poimanager.poimanagergui.PoiManagerGui'
        options:
            data_scan_axes: xy  #optional, default: xy
        connect:
            poi_manager_logic: 'poi_manager_logic'


logic:
    time_series_reader_logic:
        module.Class: 'time_series_reader_logic.TimeSeriesReaderLogic'
        options:
            max_frame_rate: 20  # optional (default: 20Hz)
            channel_buffer_size: 1048576  # optional (default: 1MSample)
            max_raw_data_bytes: 1073741824  # optional (default: 1GB)
        connect:
            streamer: instream_dummy

    scanning_probe_logic:
        module.Class: 'scanning_probe_logic.ScanningProbeLogic'
        options:
            max_history_length: 20
            max_scan_update_interval: 2
            position_update_interval: 1
        connect:
            scanner: scanner_dummy

    scanning_data_logic:
        module.Class: 'scanning_data_logic.ScanningDataLogic'
        options:
            max_history_length: 20
        connect:
            scan_logic: scanning_probe_logic

    scanning_optimize_logic:
        module.Class: 'scanning_optimize_logic.ScanningOptimizeLogic'
        connect:
            scan_logic: scanning_probe_logic

    poi_manager_logic:
        module.Class: 'poi_manager_logic.PoiManagerLogic'
        connect:
            scanning_logic: 'scanning_probe_logic'
            optimize_logic: 'scanning_optimize_logic'
            data_logic: 'scanning_data_logic'

    camera_logic:
        module.Class: 'camera_logic.CameraLogic'
        connect:
            camera: 'camera_dummy'

    laser_logic:
        module.Class: 'laser_logic.LaserLogic'
        options:
            query_interval: 0.1
        connect:
            laser: 'laser_dummy'

    odmr_logic:
        module.Class: 'odmr_logic.OdmrLogic'
        connect:
            microwave: 'microwave_dummy'
            data_scanner: 'finite_sampling_input_dummy'

    switch_logic:
        module.Class: 'switch_logic.SwitchLogic'
        options:
            watchdog_interval: 1
            autostart_watchdog: True
        connect:
            switch: 'switch_interfuse'

    pulsed_master_logic:
        module.Class: 'pulsed.pulsed_master_logic.PulsedMasterLogic'
        connect:
            pulsedmeasurementlogic: 'pulsed_measurement_logic'
            sequencegeneratorlogic: 'sequence_generator_logic'

    sequence_generator_logic:
        module.Class: 'pulsed.sequence_generator_logic.SequenceGeneratorLogic'
        #overhead_bytes: 0
        #additional_predefined_methods_path: null
        #additional_sampling_functions_path: null
        #assets_storage_path:
        connect:
            pulsegenerator: 'pulser_dummy'

    pulsed_measurement_logic:
        module.Class: 'pulsed.pulsed_measurement_logic.PulsedMeasurementLogic'
        options:
            raw_data_save_type: 'text'
            #additional_extraction_path:
            #additional_analysis_path:
        connect:
            fastcounter: 'fast_counter_dummy'
            #microwave: 'microwave_dummy'
            pulsegenerator: 'pulser_dummy'

    qdplot_logic:
        module.Class: 'qdplot_logic.QDPlotLogic'

    spectrometer_logic:
        module.Class: 'spectrometer_logic.SpectrometerLogic'
        connect:
            spectrometer: 'spectrometer_dummy'
    
    simple_scan_logic:
        module.Class: simple_scan_logic.SimpleScanLogic
        connect:
            laser: laser_dummy
            microwave: microwave_dummy
            data_scanner: finite_sampling_input_dummy
            awg: simple_awg_logic

    simple_awg_logic:
        module.Class: 'simple_awg_logic.SimpleAWGLogic'
        connect:
            awg: 'awg_dummy'

    time_hist_logic:
        module.Class: 'time_hist_logic.TimeHistLogic'
        connect:
            data_scanner: 'time_hist_dummy'
        options:
            poll_interval_ms: 10
            save_thumbnails: True

    positioner_logic:
        module.Class: 'positioner_logic.PositionerLogic'
        options:
            poll_interval: 0.5  # optional, in seconds
        connect:
            positioner: positioner_dummy

    pid_logic:
        module.Class: 'pid_logic.PIDLogic'
        connect:
            controller: 'softpid'
        options:
            timestep: 0.1

    softpid:
        module.Class: 'software_pid_controller.SoftPIDController'
        options:
            process_value_channel: 'Temperature'
            setpoint_channel: 'Current'
            timestep: 100
        connect:
            process_value: process_control_dummy
            setpoint: process_control_dummy

    task_runner_logic:
        module.Class: 'taskrunner.TaskRunnerLogic'
        options:
            module_tasks: {}



hardware:
    instream_dummy:
        module.Class: 'dummy.data_instream_dummy.InStreamDummy'
        options:
            channel_names:
                - 'digital 1'
                - 'analog 1'
                - 'analog 2'
                - 'digital 2'
            channel_units:
                - 'Hz'
                - 'V'
                - 'V'
                - 'Hz'
            channel_signals:  # Can be 'counts' or 'sine'
                - 'counts'
                - 'sine'
                - 'sine'
                - 'counts'
            data_type: 'float64'
            sample_timing: 'CONSTANT'  # Can be 'CONSTANT', 'TIMESTAMP' or 'RANDOM'

    scanner_dummy:
        module.Class: 'dummy.scanning_probe_dummy.ScanningProbeDummy'
        options:
            position_ranges:
                x: [0, 200e-6]
                y: [0, 200e-6]
                z: [-100e-6, 100e-6]
            frequency_ranges:
                x: [1, 5000]
                y: [1, 5000]
                z: [1, 1000]
            resolution_ranges:
                x: [1, 10000]
                y: [1, 10000]
                z: [2, 1000]
            position_accuracy:
                x: 10e-9
                y: 10e-9
                z: 50e-9
            # max_spot_number: 80e3 # optional
            # spot_density: 1e5 # optional
            # spot_view_distance_factor: 2 # optional
            # spot_size_dist: [400e-9, 100e-9] # optional
            # spot_amplitude_dist: [2e5, 4e4] # optional
            # require_square_pixels: False # optional
            # back_scan_available: True # optional
            # back_scan_frequency_configurable: True # optional
            # back_scan_resolution_configurable: True # optional
            # image_generation_max_calculations: 100e6 # optional
            # image_generation_chunk_size: 1000 # optional

    finite_sampling_input_dummy:
        module.Class: 'dummy.finite_sampling_input_dummy.FiniteSamplingInputDummy'
        options:
            simulation_mode: 'ODMR'
            sample_rate_limits: [1, 1e6]
            frame_size_limits: [1, 1e9]
            channel_units:
                'APD counts 1': 'c/s'
                'APD counts 2': 'c/s'
                'Photodiode': 'V'

    time_hist_dummy:
        module.Class: 'dummy.time_hist_dummy.TimeHistDummy'
        options:
            digital_channels:
                - pfi0
                - pfi1

    finite_sampling_output_dummy:
        module.Class: 'dummy.finite_sampling_output_dummy.FiniteSamplingOutputDummy'
        options:
            sample_rate_limits: [1, 1e6]
            frame_size_limits: [1, 1e9]
            output_mode: 'JUMP_LIST'
            channel_units:
                'Frequency': 'Hz'
                'Voltage': 'V'

    finite_sampling_io_dummy:
        module.Class: 'dummy.finite_sampling_io_dummy.FiniteSamplingIODummy'
        options:
            sample_rate_limits: [1, 1e6]
            frame_size_limits: [1, 1e9]
            default_output_mode: 'JUMP_LIST'
            input_channel_units:
                'APD counts': 'c/s'
                'Photodiode': 'V'
            output_channel_units:
                'Frequency': 'Hz'
                'Voltage': 'V'

    camera_dummy:
        module.Class: 'dummy.camera_dummy.CameraDummy'

    laser_dummy:
        module.Class: 'dummy.simple_laser_dummy.SimpleLaserDummy'

    microwave_dummy:
        module.Class: 'dummy.microwave_dummy.MicrowaveDummy'

    switch_interfuse:
        module.Class: 'interfuse.switch_combiner_interfuse.SwitchCombinerInterfuse'
        options:
            extend_hardware_name: True
        connect:
            switch1: 'switch1_dummy'
            switch2: 'process_control_dummy'


    switch1_dummy:
        module.Class: 'dummy.switch_dummy.SwitchDummy'
        options:
            name: 'First'  # optional
            remember_states: True  # optional
            switches:
                one: ['down', 'up']
                two: ['down', 'up']
                three: ['low', 'middle', 'high']

    fast_counter_dummy:
        module.Class: 'dummy.fast_counter_dummy.FastCounterDummy'
        options:
            gated: False

    pulser_dummy:
        module.Class: 'dummy.pulser_dummy.PulserDummy'
        options:
            force_sequence_option: False

    spectrometer_dummy:
        module.Class: 'dummy.spectrometer_dummy.SpectrometerDummy'
        
    positioner_dummy:
        module.Class: 'dummy.positioner_dummy.PositionerDummy'
        options:
            axis_dict:
                X: 3
                Y: 2
                Z: 1
            restrict_z: True

    awg_dummy:
        module.Class: 'dummy.awg_dummy.AWGDummy'
        options:
            default_sample_rate: 1.00e9
            channels: ['a_ch1', 'd_ch1', 'a_ch2', 'd_ch2', 'd_ch3']

    process_control_dummy:
        module.Class: 'dummy.process_control_dummy.ProcessControlDummy'
        options:
            process_value_channels:
                Temperature:
                    unit: 'K'
                    limits: [0, .inf]
                    dtype: float
                Voltage:
                    unit: 'V'
                    limits: [-10.0, 10.0]
                    dtype: float
            setpoint_channels:
                Current:
                    unit: 'A'
                    limits: [-5, 5]
                    dtype: float
                Frequency:
                    unit: 'Hz'
                    limits: [100.0e3, 20.0e9]
                    dtype: float
            linear_dependency:
                process_value_channel: 'Temperature'
                setpoint_channel: 'Current'
                slope: 10
                offset: 100
                noise: 0.1

            
    ### Typical HW configs
    
    # spectrum_awg:
        # module.Class: 'awg.spectrum_DN2.AWG_DN2'
        # options:
            # awg_ip_address: '169.254.64.213'
            # timeout: 0
            # default_sample_rate: 1.00e9
            # reps: 0
            # volts: [0.5, 0.5, 0.5, 0.5]
            # ohms: ['low', 'low', 'low', 'low']
            # channels: ['a_ch1', 'd_ch1', 'a_ch2', 'd_ch2', 'd_ch3']
            
    # mw_source_srssg:
        # module.Class: 'microwave.mw_source_srssg.MicrowaveSRSSG'
        # options:
            # visa_address: 'TCPIP::169.254.45.24'
            # comm_timeout: 10

    # ni_pulse_timing_input:
    #     module.Class: 'ni_x_series.ni_x_series_time_hist.NIXSeriesPulseTimingInput'
    #     options:
    #         device_name : Dev1  #NI Name of DAQ device
    #         digital_channels :  # Digital channels available to acquire on
    #             PFI8
    #         trigger_source : PFI0  # Source of timing reset (t=0) trigger
    #         trigger_edge : RISING  # Are digital/trigger sources rising/falling edge?

    # ni_scanner:
        # module.Class: 'interfuse.ni_scanning_probe_interfuse.NiScanningProbeInterfuse'
        # # to use without tilt correction
        # # module.Class: 'interfuse.ni_scanning_probe_interfuse.NiScanningProbeInterfuseBare'
        # connect:
            # scan_hardware: 'ni_io'
            # analog_output: 'nicard_6363_ao'
        # options:
            # ni_channel_mapping:
                # x: 'ao0' # Thorlabs galvo
                # y: 'ao1' # Thorlabs galvo
                # z: 'ao2' # To attocube z axis DC in (fine scan range)
                # # a: 'ao3'
                # fluorescence: 'PFI8'
                # # backreflection: 'PFI14'
                # # APD2: 'PFI9'
                # # AI0: 'ai0'
                # # APD3: 'PFI10'
            # position_ranges: # in m
                # x: [0, 600e-6]
                # y: [0, 600e-6]
                # z: [0, 150e-6]
            # frequency_ranges:
                # x: [1, 5000]
                # y: [1, 5000]
                # z: [1, 1000]
            # resolution_ranges:
                # x: [1, 10000]
                # y: [1, 10000]
                # z: [1, 10000]
            # input_channel_units:
                # fluorescence: 'c/s'
                # # backreflection: 'c/s'
                # # AI0: 'V'
                # # APD2: 'c/s'
                # # APD3: 'c/s'
            # backwards_line_resolution: 50 # optional
            # maximum_move_velocity: 100e-6 #m/s


    # nicard_6363_ao:
        # module.Class: 'ni_x_series.ni_x_series_analog_output.NIXSeriesAnalogOutput'
        # options:
            # device_name: 'Dev1'
            # channels:
                # ao0:
                    # limits: [-3.0, 3.0] # Thorlabs galvo x
                    # keep_value: True
                # ao1:
                    # limits: [-3.0, 3.0] # Thorlabs galvo y
                    # keep_value: True
                # ao2:
                    # limits: [0, 10.0] # To attocube z axis DC in (fine scan range)
                    # keep_value: True
                # # ao3:
                   # # limits: [0, 2.0] # Not connected
                   # # keep_value: True

    # ni_io:
        # module.Class: 'ni_x_series.ni_x_series_finite_sampling_io.NIXSeriesFiniteSamplingIO'
        # options:
            # device_name: 'Dev1'
            # input_channel_units:  # optional
                # PFI8: 'c/s'
                # # PFI14: 'c/s'
                # # PFI10: 'c/s'
                # # ai0: 'V'
                # # ai1: 'V'
            # output_channel_units:
                # 'ao0': 'V'
                # 'ao1': 'V'
                # 'ao2': 'V'
                # # 'ao3': 'V'
            # adc_voltage_ranges:
                # # ai0: [-10, 10]  # optional
                # # ai1: [-10, 10]  # optional
            # output_voltage_ranges:
                # ao0: [-3, 3]
                # ao1: [-3, 3]
                # ao2: [0, 10]
                # # ao3: [0, 2]

            # frame_size_limits: [1, 1e9]  # optional #TODO actual HW constraint?
            # output_mode: 'JUMP_LIST' #'JUMP_LIST' # optional, must be name of SamplingOutputMode
            # read_write_timeout: 10  # optional
            # # sample_clock_output: '/Dev1/PFI11' # optional

    # nicard_6323_instreamer:  #This block added from 'ni_x_series_in_streamer' by Vinaya
        # module.Class: 'ni_x_series.ni_x_series_in_streamer.NIXSeriesInStreamer'
        # options:
            # device_name: 'Dev1'
            # digital_sources:  # optional
                # - 'PFI8'
                # # - 'PFI14'
        # # analog_sources:  # optional
            # # - 'ai0'
            # # - 'ai1'
        # # external_sample_clock_source: 'PFI0'  # optional
        # # external_sample_clock_frequency: 1000  # optional
            # adc_voltage_range: [-10, 10]  # optional
            # max_channel_samples_buffer: 10000000  # optional
            # read_write_timeout: 10  # optional

    # ni_finite_sampling_input:
        # module.Class: 'ni_x_series.ni_x_series_finite_sampling_input.NIXSeriesFiniteSamplingInput'
        # options:
            # device_name: 'Dev1'
            # digital_channel_units:  # optional
                # 'PFI8': 'c/s'
                # # 'PFI14': 'c/s'
            # analog_channel_units:  # optional
                # # 'ai0': 'V'
                # # 'ai1': 'V'
            # adc_voltage_range: [-10, 10]  # optional, default [-10, 10]
            # max_channel_samples_buffer: 10000000  # optional, default 10000000
            # read_write_timeout: 10  # optional, default 10
            # # sample_clock_output: '/Dev1/PFI12'  # optional, wire internal sample clock to terminal
            # trigger_edge: RISING  # optional
            # Below for using external sample clock. Either single external clock, or dict of source : clock(s). Use [] for multiple clocks on one source.
            # It's assumed each has the same frequency, but can be different clocks for specific timing.
            # If sampling on external clock, sample rate is used only for normalizing counts per second. Uses either default below, or as modified in software.
            # Unspecified channels will use either '' or 'default' as default, otherwise will use first clock in list.
            # Analog channels will use default channel.
            # external_sample_clock_source:   # optional, clock OR source : clock(s)
               # 'PFI8': ['PFI0','PFI1']
            # # gate_on_external_clock: True  # optional, gate the input signal on the external clock for specified inputs above.
            # # sample_on_external_clock: True  # optional, sample on the external clock, so every external clock pulse is recorded.
            # # external_sample_clock_frequency: 1 # optional, for calculating rate if sampling externally. (If not provided, counts will be per cycle, not per second)

    # andor_spectrometer:
        # module.Class: 'spectrometer.andor_spectrometer.AndorSpectrometer'
        # connect:
            # camera: 'andor_camera'
        # options:
            # dll_location: 'C:\\Program Files\\Andor SOLIS\\atspectrograph.dll' # path to library file, likely in Andor Solis installation folder
            # ini_location: 'C:\\Program Files\\Andor SOLIS\\SPECTROG.INI' # Optional (?), path to detector INI file, likely in Andor Solis installation folder
            # exposure_time: 1 #Optional, exposure time in seconds, default=0.1

    # andor_camera:
        # module.Class: 'camera.andor.du401a.DU401A'
        # options:
            # dll_location: 'C:\\Program Files\\Andor SOLIS\\atmcd64d_legacy.dll' # path to library file, likely in Andor Solis installation folder
            # default_exposure: 1.0
            # default_read_mode: 'FVB'  #FVB, MULTI_TRACK, RANDOM_TRACK, SINGLE_TRACK, IMAGE
            # default_temperature: -70
            # default_cooler_on: True
            # default_acquisition_mode: 'SINGLE_SCAN'  #SINGLE_SCAN, ACCUMULATE, KINETICS, FAST_KINETICS, RUN_TILL_ABORT
            # default_trigger_mode: 'INTERNAL'
            # has_shutter: False
